PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expName, data.getDateStr(format="%Y_%b_%d_%H.%M.%S"))
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = labMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = pedestal_cursor_ibl
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent dragging_code
      Code Type = Py
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      Begin Experiment:
        correct = 9
      Begin Routine:
        mouse.setPos(newPos=(0, 0))

        r_lim_corr = 0.05
        l_lim_corr = -0.05
        r_lim_wrong = 30
        l_lim_wrong = -30

        mouserec = mouse.getPos()
        moved = False

        dot_trajectory = []
      Each Frame:
        x = mouse.getPos()[0]
        #y = mouse.getPos()[1]

        if moved == False:
             mouseloc = mouse.getPos()
             if mouseloc[0] != mouserec[0] or mouseloc[1] != mouserec[1]:
                  moved = True
                  thisExp.addData('reaction_time',round(t*1000))

        x_r = x + 15
        x_l = x - 15

        grating_r.pos = (x_r,0)
        grating_l.pos = (x_l,0)

        if grating_r.overlaps(dot):
            dot.pos = grating_r.pos

        elif grating_l.overlaps(dot):
            dot.pos = grating_l.pos

        dot_trajectory.append(dot.pos[0])

        if eccentricity > 0:
            if grating_r.pos[0] <= r_lim_corr:
                correct = 1
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_r.pos[0] >= r_lim_wrong:
                correct = 0
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
        elif eccentricity < 0:
            if grating_l.pos[0] >= l_lim_corr:
                correct = 1
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_l.pos[0] <= l_lim_wrong:
                correct = 0
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False


        if sound_no_resp.status == STARTED:
            correct = 'NaN'
            timeout = 1
      End Routine:
        thisExp.addData("correct", correct)
        thisExp.addData('timeout', timeout)
        thisExp.addData("dot_trajectory", dot_trajectory)
    PolygonComponent dot
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every repeat] = (eccentricity, 0)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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    ImageComponent fixation
      color [set every repeat] = $[0,0,0]
      image = fixation_object.png
      mask = circle
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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    GratingComponent grating_l
      contrast [set every repeat] = leftCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (-15, 0)
      sf = 0.3
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = deg
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    GratingComponent grating_r
      contrast [set every repeat] = rightCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (15, 0)
      sf = 0.3
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = deg
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      timeRelativeTo = experiment
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    SoundComponent sound_trial_start
      sound = 5000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      volume = 0.1
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    SoundComponent sound_no_resp
      sound = 567
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
      volume = 0.1
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  Routine set_bias_condition
    CodeComponent bias_rows_code
      Code Type = Py
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      Begin Experiment:
        bias_file = ""
        bias_yn = 0
      Begin Routine:
        if int(expInfo['participant'])%2 == 0:
            bias_file = "nobias_block.xlsx"
            bias_yn = 0

        else:
            bias_file = "bias_block.xlsx"
            bias_yn = 1

        thisExp.addData("bias_file", bias_file)
        thisExp.addData("bias_yn", bias_yn)
    CodeComponent windows_mousevisible
      Code Type = Py
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      Begin Routine:
        win.Mousevisible = False
  Routine fix
    CodeComponent mouse_visible
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = False
        mouse.setPos(newPos=(0, 0))
      Each Frame:
        mouse.setPos(newPos=(0, 0))
    CodeComponent set_iti
      Code Type = Py
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      Begin Experiment:
        #iti = 0
        #maxDur = 0.7
        #minDur = 0.4
      Begin Routine:
        import random
        #iti = minDur + (maxDur - minDur) * random.random()

        #thisExp.addData("iti", iti)
    CodeComponent set_contrast_side
      Code Type = Py
      Begin Routine:
        if eccentricity == -15:
            leftCont = baseContrast+contrastDelta
            rightCont = baseContrast
        elif eccentricity == 15:
            leftCont = baseContrast
            rightCont = baseContrast+contrastDelta

        signed_contrast=rightCont-leftCont


        # Save all these variables to the log
        thisExp.addData("signed_contrast", signed_contrast)
        thisExp.addData("leftCont", leftCont)
        thisExp.addData("rightCont", rightCont)
    ImageComponent fixation_2
      color [set every repeat] = $[1,1,1]
      image = fixation_object.png
      mask = circle
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $q
      units = deg
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        fb_sound = 100
        fb_dur = 10
        fb_sound_dur = 5
        fb_volume = 0.1
      Begin Routine:
        mouse.setPos(newPos=(0, 0))

        if correct==1:
            fb_sound = "2000.wav"
            fb_sound_dur = 0.2
            fb_dur = 1
            fb_volume = 0.1

        elif correct==0:
            fb_sound = "whitenoise.wav"
            fb_sound_dur = 0.5
            fb_dur = 2
            fb_volume = 0.1

        else:
            fb_sound = 200
            fb_sound_dur = 0.1
            fb_dur = 1.5
            fb_volume = 0
      Each Frame:
        mouse.setPos(newPos=(0, 0))
      End Routine:
        #feedback_sound.sound
    SoundComponent feedback_sound
      sound [set every repeat] = $fb_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_sound_dur
      volume [set every repeat] = fb_volume
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    ImageComponent fixation_3
      image = fixation_object.png
      mask = circle
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_dur
      units = deg
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  Routine outro
    TextComponent outro_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        You will now be redirected to an online form, where you must fill in your details in order to receive payment or credits. If you do not fill in your details, you will not receive compensation.

        Click 'Continue' to close this window and open the online form.
    TextComponent continue_txt_5
      color = orange
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_7
      clickable = continue_txt_5
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block_break
    CodeComponent block_counter
      Code Type = Py
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      Begin Experiment:
        if int(expInfo['participant'])%2 == 0:
            block_breaks = "n"

        else:
            block_breaks = 'y'

        thisExp.addData("block_breaks", block_breaks)
      Begin Routine:
        if block_breaks == 'n':
            continueRoutine=False
    TextComponent break_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = height
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      text:
        You can take a quick break to rest your eyes.

        The experiment will resume automatically in
    TextComponent countdown
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $int(round(10 - t, 3))
      units = height
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  Routine example_grating
    GratingComponent examplegrating
      mask = gauss
      pos = (350, 0)
      saveStartStop = False
      sf = 0.5
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = deg
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  Routine welcome
    TextComponent welcome_position
      letterHeight = 0.035
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Welcome to the experiment!
        In this study, we investigate how people make visual decisions.

        Please position yourself comfortably in front of the computer. You can move the desk up or down using the handle on the right.
        Make sure that you can comfortably reach the mouse and that you are facing the center of the screen.
        Try to stay in the same position throughout the experiment.

        You will not need the keyboard during the experiment.

        Click 'Continue' to see more information.
    TextComponent continue_txt
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_1
      clickable = continue_txt
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instruction_txt
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        We will now walk you through the steps of this decision-making experiment.

        You will see a red fixation point in the middle of the screen. Please keep your eyes focused on this fixation point throughout the experiment.

        At the beginning of each trial you will hear a sharp beep.
        You will then see two target images appear on each side of the screen.

        Click 'Continue' to see more instructions.
    TextComponent continue_txt_2
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_2
      clickable = continue_txt_2
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent save_winsize
      Code Type = Py
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      Begin Experiment:
        thisExp.addData("win_size", win.size)
      End Routine:
        thisExp.addData('session_start', core.getTime())
  Routine age
    TextComponent age_txt
      letterHeight = 0.75
      pos = (0, 5)
      startVal [time (s)] = 0.0
      units = deg
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      text:
        How old are you?

        Select your age, then click 'Continue'. If you prefer not to say, click 'Continue'.
    SliderComponent age_slider
      forceEndRoutine = False
      granularity = 1
      labels = 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35
      letterHeight = 0.75
      size = (30, 2)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35)
      units = deg
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    TextComponent continue_txt_4
      color = orange
      letterHeight = 0.75
      pos = (0, -5)
      startVal [time (s)] = 0.0
      text = Continue
      units = deg
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    MouseComponent mouse_4
      clickable = continue_txt_4
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine gender
    TextComponent gender_txt
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = What is your gender?
      units = height
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    TextComponent woman
      letterHeight = 0.035
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = Woman
      units = height
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    TextComponent man
      letterHeight = 0.035
      pos = (-0.15, -0.1)
      startVal [time (s)] = 0.0
      text = Man
      units = height
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    TextComponent nonbinary
      letterHeight = 0.035
      pos = (0.09, -0.1)
      startVal [time (s)] = 0.0
      text = Non-binary
      units = height
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    TextComponent other
      letterHeight = 0.035
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Other/
        Prefer not to say
    MouseComponent mouse_5
      clickable = woman, man, nonbinary, other
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine handedness
    TextComponent handedness_txt
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Are you:
      units = height
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    TextComponent right_hand
      letterHeight = 0.035
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = Right-handed
      units = height
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    TextComponent left_hand
      letterHeight = 0.035
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Left-handed
      units = height
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    TextComponent ambidx
      letterHeight = 0.035
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Other/
        Prefer not to say
    MouseComponent mouse_6
      clickable = right_hand, left_hand, ambidx
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine survey_link
    CodeComponent code_link
      Code Type = Py
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      Begin Routine:
        import webbrowser

        win.fullscr = False # exit full screen
        webbrowser.open('https://leidenuniv.eu.qualtrics.com/jfe/form/SV_7NZQQU7iwLDucU6') # open browser
      Each Frame:
        #if mouse_8.isPressedIn(txt_for_link):
        #    webbrowser.open("https://www.google.com")
      End Routine:
        #win.fullscr = True #bring back to full screen

        endExpNow=True
    TextComponent txt_for_link
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Opening URL...
      units = height
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  Routine consent_form
    CodeComponent exit_exp
      Code Type = Py
      Each Frame:
        if mouse_3.isPressedIn(exit_txt):
            endExpNow=True
    TextComponent consent_txt
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        If you agree with the statements below, and you want to take part in the experiment, click 'Continue'.
        If you do not agree, click 'Exit' and leave the room.


        I have read and I understand the information provided about this study.

        I have had the opportunity to ask questions, and those questions have been sufficiently answered.

        I understand that my data will not have identifying information on it, so people will not know my name or which data belongs to me.

        You can use my coded data for scientific research and share these data, either directly with other researchers or in a public online repository.
    TextComponent continue_txt_3
      color = orange
      letterHeight = 0.04
      pos = (0.3, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    TextComponent exit_txt
      color = orange
      letterHeight = 0.04
      pos = (-0.3, -0.4)
      startVal [time (s)] = 0.0
      text = Exit
      units = height
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    MouseComponent mouse_3
      clickable = continue_txt_3, exit_txt
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent_info_1
    TextComponent consent_txt1
      letterHeight = 0.035
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      units = height
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      text:
        To participate in this study, you should be healthy and have no current psychiatric, neurological or psychological disorders. You should be able to focus on a computer game for around 30 minutes. If you use glasses or contact lenses, please make sure you put them on before continuing.

        Participating in this study is harmless. The only downside of participation is your time investment.

        At the beginning of the session, you will be given instructions and some examples of the task. You will then perform the visual decision-making task. Once you complete the task, you will be fully debriefed and receive your compensation.
    TextComponent continue_txt_6
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_8
      clickable = continue_txt_6
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent_info_2
    TextComponent consent_txt2
      letterHeight = 0.035
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Participation in this study is completely voluntary. This means that you can stop at any time, without explanation, and without consequences for you. If you decide to end your participation before the experiment has been completed, you will be compensated for the time that you have spent up to that point (rounded to the nearest 15 minutes, by means of 1 credit per half an hour).

        All information you provide will be treated as strictly private. Your data will be processed and stored in a coded way, by assigning it a unique code rather than your name. The data you provide will be used for scientific research. We may share these coded data with other researchers, or via publicly accessible online repositories. If you do not agree to make your coded research data publicly accessible, you cannot participate in this study.
    TextComponent continue_txt_7
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_9
      clickable = continue_txt_7
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demographics
    TextComponent demogr_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = We will now ask you some information about your age, gender, and handedness.
      units = height
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    TextComponent continue_txt_8
      color = orange
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_10
      clickable = continue_txt_8
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_2
    ImageComponent example_r
      image = example right.png
      pos = (0, -0.1)
      size = (1.2, 0.6)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instruction_txt_2
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        You must choose the target image with the higher contrast. To do this, simply move the mouse and drag the chosen target to the center of the screen.

        For example, here the right target has the higher contrast, so you would move your mouse to the left.
    TextComponent continue_txt_9
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_11
      clickable = continue_txt_9
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_3
    ImageComponent example_l
      image = example left.png
      pos = (0, -0.1)
      size = (1.2, 0.6)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instruction_txt_3
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        This time, the left target has the higher contrast, so you would move your mouse to the right.

        Simply moving the mouse is enough, you don't need to click.
    TextComponent continue_txt_10
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_12
      clickable = continue_txt_10
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_4
    TextComponent instruction_txt_4
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        You will hear a high beep if you answer correctly. If you answer incorrectly, you will hear a buzzing noise instead. If you take too long to answer, you will hear a low beep.

        Please try to be as accurate and fast as possible, and try not to let the trial time-out without a response.

        Click 'Continue' to practice a few examples.
    TextComponent continue_txt_11
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_13
      clickable = continue_txt_11
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine start_session
    CodeComponent mouse_visible_2
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
    CodeComponent start_session_timer
      Code Type = Py
      Begin Routine:
        thisExp.addData('session_start', core.getTime())
    TextComponent end_practice_txt
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        That is the end of the practice rounds.

        You will now start the real experiment. Good luck!
    TextComponent continue_txt_12
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Start experiment
      units = height
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    MouseComponent mouse_14
      clickable = continue_txt_12
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine debrief
    TextComponent debrief_txt
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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      text:
        That's the end of the task.

        Thank you for participating! Now that you are done, we can tell you a little bit more.

        In this project, we want to study how well people integrate past information into their decisions. You just participated in a decision-making task modelled after a similar task designed by the International Brain Laboratory consortium.
    TextComponent continue_txt_13
      color = orange
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_15
      clickable = continue_txt_13
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent end_session_timer
      Code Type = Py
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      Begin Routine:
        thisExp.addData('session_end', core.getTime())
        win.mouseVisible = True
  Routine debrief_2
    TextComponent debrief_txt_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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      text:
        We will use your choice data to investigate how well you integrated visual information from your recent history, and what strategies you took to combine these two. This behavioural experiment will form the basis for later studying how such decision-processes unfold in the human brain.

        Please, do not reveal the details of this study while we are still collecting the data. This might affect the behaviour of prospective participants. It is really important that people who will participate in this study do not yet know about its actual aim and design.

        You can decide to withdraw your data from the study at any time. Note that the coded data may be shared in a public repository, after which it cannot be removed.
    TextComponent continue_txt_14
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_16
      clickable = continue_txt_14
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine debrief_1
    TextComponent debrief_txt_1
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = You watched a pair of stimuli on the screen, and judged the location of the more visible stimulus, which varied in difficulty. To invite you to combine this visual information with your expectations about the most likely location, we varied the probability that the target stimulus appeared on the left or right side. When the visual stimulus was ambiguous, you should then have biased your responses toward the location with more frequent targets in the recent past. For example, if 3 out of 4 previous images were shown on the right, an expectation ("I think the next image will appear on the right") should guide your decisions ("I'm not sure, so let's choose right"). The more probable image location could change unexpectedly, so you should have continually tracked the statistics of the task and updated your expectations accordingly.
      units = height
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    TextComponent continue_txt_15
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_17
      clickable = continue_txt_15
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = end
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  Routine outro_win
    TextComponent text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        You will now be redirected to an online form, where you must fill in your details in order to receive payment or credits. If you do not fill in your details, you will not receive compensation.

        Click 'Continue' to close this window and open the online form.
    TextComponent continue_txt_16
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_18
      clickable = continue_txt_16
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine consent_info_1
  Routine consent_info_2
  Routine consent_form
  Routine demographics
  Routine age
  Routine gender
  Routine handedness
  Routine instructions
  Routine instructions_2
  Routine instructions_3
  Routine instructions_4
  LoopInitiator practice loopType="TrialHandler"
    Selected rows = 36:41
    conditionsFile = pregen_params.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61010396, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61010396},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.60337632, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.60337632},
      {'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61869807, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61869807},
      {'og_eccentricity': 35, 'og_contrast': 0.0625, 'og_q': 0.55997489, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.55997489},
      {'og_eccentricity': -35, 'og_contrast': 0.25, 'og_q': 0.67488689, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.1, 'q': 0.67488689},
      {'og_eccentricity': -35, 'og_contrast': 0, 'og_q': 0.65214593, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0, 'q': 0.65214593},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4835406, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4835406},
      {'og_eccentricity': 35, 'og_contrast': 0.125, 'og_q': 0.48355817, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.48355817},
      {'og_eccentricity': -35, 'og_contrast': 0.0625, 'og_q': 0.67839508, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.67839508},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4548179, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4548179}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
    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine start_session
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:100
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61010396, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61010396},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.60337632, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.60337632},
      {'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61869807, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61869807},
      {'og_eccentricity': 35, 'og_contrast': 0.0625, 'og_q': 0.55997489, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.55997489},
      {'og_eccentricity': -35, 'og_contrast': 0.25, 'og_q': 0.67488689, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.1, 'q': 0.67488689},
      {'og_eccentricity': -35, 'og_contrast': 0, 'og_q': 0.65214593, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0, 'q': 0.65214593},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4835406, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4835406},
      {'og_eccentricity': 35, 'og_contrast': 0.125, 'og_q': 0.48355817, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.48355817},
      {'og_eccentricity': -35, 'og_contrast': 0.0625, 'og_q': 0.67839508, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.67839508},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4548179, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4548179}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
    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine block_break
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 100:200
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_2
  Routine block_break
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 200:300
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_3
  Routine block_break
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = 300:400
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_4
  Routine block_break
  LoopInitiator trials_5 loopType="TrialHandler"
    Selected rows = 400:500
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_5
  Routine block_break
  LoopInitiator trials_6 loopType="TrialHandler"
    Selected rows = 500:600
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_6
  Routine debrief
  Routine debrief_1
  Routine debrief_2
  Routine outro_win
  Routine survey_link
  Routine end
