PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expName, data.getDateStr(format="%Y_%b_%d_%H.%M.%S"))
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = labMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Use version = 2024.1.5
  Window size (pixels) = [1920, 1080]
  blendMode = nofbo
  expName = eyetrack_ibl
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    CodeComponent dragging_code
      Code Type = Py
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      Begin Experiment:
        correct = 9
      Begin Routine:
        #reset mouse position
        mouse.setPos(newPos=(0, 0))

        #set thresholds for response recording for each stim side and corr/wrong
        r_lim_corr = 0.05
        l_lim_corr = -0.05
        r_lim_wrong = 1236
        l_lim_wrong = -1236

        #setup for later recording reactio time
        mouserec = mouse.getPos()
        moved = False

        #create empty list to later store dot coordinates
        dot_trajectory = []

        #setup for el on/offset triggers
        sound_trial_start.elOnsetDetected = False
        sound_trial_start.elOffsetDetected = False

        sound_no_resp.elOnsetDetected = False
        sound_no_resp.elOffsetDetected = False
      Each Frame:
        if sound_trial_start.tStartRefresh is not None and not sound_trial_start.elOnsetDetected:
            el_tracker.sendMessage('signed_contrast %.2f' % signed_contrast)
            el_tracker.sendMessage('stimOn')
            el_tracker.sendMessage('sound_trial_start_ONSET')
            sound_trial_start.elOnsetDetected = True

        if sound_trial_start.tStopRefresh is not None and sound_trial_start.tStartRefresh is not None and not sound_trial_start.elOffsetDetected:
            el_tracker.sendMessage('sound_trial_start_OFFSET')
            sound_trial_start.elOffsetDetected = True

        x = mouse.getPos()[0]

        if moved == False:
             mouseloc = mouse.getPos()
             if mouseloc[0] != mouserec[0] or mouseloc[1] != mouserec[1]:
                  moved = True
                  thisExp.addData('reaction_time',round(t*1000))
                  el_tracker.sendMessage('moveInit')

        x_r = x + 618
        x_l = x - 618

        grating_r.pos = (x_r,0)
        grating_l.pos = (x_l,0)

        if grating_r.overlaps(dot):
            dot.pos = grating_r.pos

        elif grating_l.overlaps(dot):
            dot.pos = grating_l.pos

        dot_trajectory.append(dot.pos[0])

        if eccentricity > 0:
            if grating_r.pos[0] <= r_lim_corr:
                correct = 1
                timeout=0
                response=1
                el_tracker.sendMessage('response %i' % response)
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_r.pos[0] >= r_lim_wrong:
                correct = 0
                timeout=0
                response=-1
                el_tracker.sendMessage('response %i' % response)
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
        elif eccentricity < 0:
            if grating_l.pos[0] >= l_lim_corr:
                correct = 1
                timeout=0
                response=-1
                el_tracker.sendMessage('response %i' % response)
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_l.pos[0] <= l_lim_wrong:
                correct = 0
                timeout=0
                response=1
                el_tracker.sendMessage('response %i' % response)
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False


        if sound_no_resp.status == STARTED:
            correct = 'NaN'
            timeout = 1


        if sound_no_resp.tStartRefresh is not None and not sound_no_resp.elOnsetDetected:
            el_tracker.sendMessage('timeout')
            el_tracker.sendMessage('sound_no_resp_ONSET')
            sound_no_resp.elOnsetDetected = True

        if sound_no_resp.tStopRefresh is not None and sound_no_resp.tStartRefresh is not None and not sound_no_resp.elOffsetDetected:
            el_tracker.sendMessage('sound_no_resp_OFFSET')
            sound_no_resp.elOffsetDetected = True
      End Routine:
        thisExp.addData("correct", correct)
        thisExp.addData('timeout', timeout)
        thisExp.addData("dot_trajectory", dot_trajectory)
    PolygonComponent dot
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every repeat] = (618, 0)
      shape = circle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    GratingComponent grating_l
      contrast [set every repeat] = leftCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (-618, 0)
      sf = 0.0073
      size = (618, 618)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = pix
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    GratingComponent grating_r
      contrast [set every repeat] = rightCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (618, 0)
      sf = 0.0073
      size = (618, 618)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = pix
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    ImageComponent fixation
      color [set every repeat] = $[1,1,1]
      image = fixation_object.png
      mask = circle
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      timeRelativeTo = experiment
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    SoundComponent sound_trial_start
      sound [set every repeat] = 5000
      speakerIndex = 7.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      volume = 0.1
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    SoundComponent sound_no_resp
      sound [set every repeat] = 567
      speakerIndex = 7.0
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
      volume = 0.1
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    MarkEvents MarkEventsTrial plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = dot,grating_l,grating_r
      includeAllEventMarkedComponentsForDVDrawingMessages = False
      includeAllEventMarkedComponentsForIAMessages = False
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = True
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = eccentricity,q,baseContrast,contrastDelta,bias
      useQuitKeys = True
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  Routine set_bias_condition
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    CodeComponent bias_rows_code
      Code Type = Py
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      Begin Experiment:
        bias_file = ""
        bias_yn = 0
      Begin Routine:
        if int(expInfo['participant'])%2 == 0:
            bias_file = "nobias_block.xlsx"
            bias_yn = 0

        else:
            bias_file = "bias_block.xlsx"
            bias_yn = 1

        thisExp.addData("bias_file", bias_file)
        thisExp.addData("bias_yn", bias_yn)
    CodeComponent windows_mousevisible
      Code Type = Py
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      Begin Routine:
        win.Mousevisible = False
  Routine fix
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    CodeComponent mouse_visible
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = False
        mouse.setPos(newPos=(0, 0))
      Each Frame:
        mouse.setPos(newPos=(0, 0))
    CodeComponent set_iti
      Code Type = Py
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      Begin Experiment:
        #iti = 0
        #maxDur = 0.7
        #minDur = 0.4
      Begin Routine:
        import random
        #iti = minDur + (maxDur - minDur) * random.random()

        #thisExp.addData("iti", iti)
    CodeComponent set_contrast_side
      Code Type = Py
      Begin Routine:
        if eccentricity == -15:
            leftCont = baseContrast+contrastDelta
            rightCont = baseContrast
        elif eccentricity == 15:
            leftCont = baseContrast
            rightCont = baseContrast+contrastDelta

        signed_contrast=rightCont-leftCont

        # Save all these variables to the log
        thisExp.addData("signed_contrast", signed_contrast)
        thisExp.addData("leftCont", leftCont)
        thisExp.addData("rightCont", rightCont)

        #setup for el time triggers
        fixation_2.elOnsetDetected = False
        fixation_2.elOffsetDetected = False
      Each Frame:
        if fixation_2.tStartRefresh is not None and not fixation_2.elOnsetDetected:
            el_tracker.sendMessage('fix_cross_ONSET')
            fixation_2.elOnsetDetected = True

        if fixation_2.tStopRefresh is not None and fixation_2.tStartRefresh is not None and not fixation_2.elOffsetDetected:
            el_tracker.sendMessage('fix_cross_OFFSET')
            fixation_2.elOffsetDetected = True
    ImageComponent fixation_2
      color [set every repeat] = $[1,1,1]
      image = fixation_object.png
      mask = circle
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $q
      units = deg
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  Routine feedback
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    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        fb_sound = 100
        fb_dur = 10
        fb_sound_dur = 5
        fb_volume = 0.1
      Begin Routine:
        mouse.setPos(newPos=(0, 0))

        el_tracker.sendMessage('feedbackType %s' % correct)

        if correct==1:
            fb_sound = "2000.wav"
            fb_sound_dur = 0.2
            fb_dur = 1
            fb_volume = 0.1

        elif correct==0:
            fb_sound = "whitenoise.wav"
            fb_sound_dur = 0.5
            fb_dur = 2
            fb_volume = 0.1

        else:
            fb_sound = 200
            fb_sound_dur = 0.1
            fb_dur = 1.5
            fb_volume = 0


        #fixation_3.elOnsetDetected = False
        #fixation_3.elOffsetDetected = False

        feedback_sound.elOnsetDetected = False
        feedback_sound.elOffsetDetected = False
      Each Frame:
        mouse.setPos(newPos=(0, 0))

        #if fixation_3.tStartRefresh is not None and not fixation_3.elOnsetDetected:
            #el_tracker.sendMessage('%i %s_ONSET' % (int(round((globalClock.getTime()-fixation_3.tStartRefresh)*1000)),fixation_3.name))
            #fixation_3.elOnsetDetected = True

        #if fixation_3.tStopRefresh is not None and fixation_3.tStartRefresh is not None and not fixation_3.elOffsetDetected:
            #el_tracker.sendMessage('%i %s_OFFSET' % (int(round((globalClock.getTime()-fixation_3.tStopRefresh)*1000)),fixation_3.name))
            #fixation_3.elOffsetDetected = True

        if feedback_sound.tStartRefresh is not None and not feedback_sound.elOnsetDetected:
            el_tracker.sendMessage('feedback_sound_ONSET')
            feedback_sound.elOnsetDetected = True

        if feedback_sound.tStopRefresh is not None and feedback_sound.tStartRefresh is not None and not feedback_sound.elOffsetDetected:
            el_tracker.sendMessage('feedback_sound_OFFSET')
            feedback_sound.elOffsetDetected = True
    SoundComponent feedback_sound
      sound [set every repeat] = $fb_sound
      speakerIndex = 7.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_sound_dur
      volume [set every repeat] = fb_volume
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    ImageComponent fixation_3
      image = fixation_object.png
      mask = circle
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_dur
      units = deg
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  Routine outro
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    TextComponent outro_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        You will now be redirected to an online form, where you must fill in your details in order to receive payment or credits. If you do not fill in your details, you will not receive compensation.

        Click 'Continue' to close this window and open the online form.
    TextComponent continue_txt_5
      color = orange
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_7
      clickable = continue_txt_5
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block_break
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    CodeComponent block_counter
      Code Type = Py
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      Begin Experiment:
        if int(expInfo['participant'])%2 == 0:
            block_breaks = 0

        else:
            block_breaks = 1

        thisExp.addData("block_breaks", block_breaks)
      Begin Routine:
        if block_breaks == 0:
            continueRoutine=False

        else:
            el_tracker.sendMessage('block_break start')
      End Routine:
        el_tracker.sendMessage('block_break end')
    TextComponent break_text
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = height
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      text:
        You can take a quick break to rest your eyes.

        The experiment will resume automatically in
    TextComponent countdown
      color = black
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $int(round(10 - t, 3))
      units = height
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  Routine example_grating
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    GratingComponent examplegrating
      mask = gauss
      pos = (350, 0)
      saveStartStop = False
      sf = 0.5
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = deg
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  Routine welcome
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    TextComponent welcome_position
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, 0.05)
      saveStartStop = False
      startVal [frame N] = 0.0
      units = height
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      text:
        Welcome to the experiment!

        Please keep your head on the chinrest in front of you.

        Make sure that you can comfortably reach the mouse; you will not need the keyboard for now.

        Try to stay in the same position throughout the experiment.

        Click 'Continue' when you are ready.
    TextComponent continue_txt
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_1
      clickable = continue_txt
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine age
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    TextComponent age_txt
      color = black
      letterHeight = 0.75
      pos = (0, 5)
      startVal [time (s)] = 0.0
      units = deg
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      text:
        How old are you?

        Click on a number to select your age, then click 'Continue'.
        If you prefer not to say, click 'Continue'.
    SliderComponent age_slider
      forceEndRoutine = False
      granularity = 1
      labels = 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35, 36, 37, 38, 39, 40
      letterHeight = 0.75
      size = (35, 2)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35, 36, 37, 38, 39, 40)
      units = deg
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    TextComponent continue_txt_4
      color = orange
      letterHeight = 0.75
      pos = (0, -5)
      startVal [time (s)] = 0.0
      text = Continue
      units = deg
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    MouseComponent mouse_4
      clickable = continue_txt_4
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine gender
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    TextComponent gender_txt
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = What is your gender?
      units = height
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    TextComponent woman
      color = black
      letterHeight = 0.035
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = Woman
      units = height
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    TextComponent man
      color = black
      letterHeight = 0.035
      pos = (-0.15, -0.1)
      startVal [time (s)] = 0.0
      text = Man
      units = height
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    TextComponent nonbinary
      color = black
      letterHeight = 0.035
      pos = (0.09, -0.1)
      startVal [time (s)] = 0.0
      text = Non-binary
      units = height
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    TextComponent other
      color = black
      letterHeight = 0.035
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Other/
        Prefer not to say
    MouseComponent mouse_5
      clickable = woman, man, nonbinary, other
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine handedness
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    TextComponent handedness_txt
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Are you:
      units = height
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    TextComponent right_hand
      color = black
      letterHeight = 0.035
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = Right-handed
      units = height
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    TextComponent left_hand
      color = black
      letterHeight = 0.035
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Left-handed
      units = height
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    TextComponent ambidx
      color = black
      letterHeight = 0.035
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Other/
        Prefer not to say
    MouseComponent mouse_6
      clickable = right_hand, left_hand, ambidx
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine survey_link
    RoutineSettingsComponent survey_link
      disabled = True
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    CodeComponent code_link
      Code Type = Py
      disabled = True
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      Begin Routine:
        import webbrowser

        win.fullscr = False # exit full screen
        webbrowser.open('https://leidenuniv.eu.qualtrics.com/jfe/form/SV_7NZQQU7iwLDucU6') # open browser
      Each Frame:
        #if mouse_8.isPressedIn(txt_for_link):
        #    webbrowser.open("https://www.google.com")
      End Routine:
        #win.fullscr = True #bring back to full screen

        endExpNow=True
    TextComponent txt_for_link
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Opening URL...
      units = height
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  Routine consent_form
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    CodeComponent exit_exp
      Code Type = Py
      Each Frame:
        if mouse_3.isPressedIn(exit_txt):
            endExpNow=True
    TextComponent consent_txt
      color = black
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        If you agree with the statements below, and you want to take part in the experiment, click 'Continue'.
        If you do not agree, you can click 'Exit' and leave the room.


        "I have read and I understand the information provided about this study."

        "I have had the opportunity to ask questions, and those questions have been sufficiently answered."

        "I understand that my data will not have identifying information on it, so people will not know my name or which data belongs to me."

        "You can use my coded data for scientific research and share these data, either directly with other researchers or in a public online repository."
    TextComponent continue_txt_3
      color = orange
      letterHeight = 0.04
      pos = (0.3, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    TextComponent exit_txt
      color = orange
      letterHeight = 0.04
      pos = (-0.3, -0.4)
      startVal [time (s)] = 0.0
      text = Exit
      units = height
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    MouseComponent mouse_3
      clickable = continue_txt_3, exit_txt
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent_info_1
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    CodeComponent mouse_visible_3
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
    TextComponent consent_txt1
      color = black
      letterHeight = 0.035
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      units = height
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      text:
        To participate in this study, you should be healthy and have no current psychiatric, neurological or psychological disorders. You should be able to focus on a computer game for around 30 minutes.

        Participating in this study is harmless. The only downside of participation is your time investment.

        At the beginning of the session, you will be given instructions and some examples of the task. You will then perform the visual decision-making task. Once you complete the task, you will be fully debriefed and receive your compensation.
    TextComponent continue_txt_6
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_8
      clickable = continue_txt_6
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent_info_2
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    TextComponent consent_txt2
      color = black
      letterHeight = 0.035
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Participation in this study is completely voluntary. This means that you can stop at any time, without explanation, and without consequences for you.

        If you decide to end your participation before the experiment has been completed, you will be compensated for the time that you have spent up to that point (rounded to the nearest 15 minutes, by means of 1 credit per half an hour).

        All information you provide will be treated as strictly private.
        Your data will be processed and stored in a coded way, by assigning it a unique code rather than your name.
        The data you provide will be used for scientific research. We may share these coded data with other researchers, or via publicly accessible online repositories.
        If you do not agree to make your coded research data publicly accessible, you cannot participate in this study.
    TextComponent continue_txt_7
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_9
      clickable = continue_txt_7
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demographics
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    CodeComponent mouse_visible_4
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
    TextComponent demogr_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        Thank you! The camera setup is done.

        We will now ask you some information about your age, gender, and handedness.
    TextComponent continue_txt_8
      color = orange
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_10
      clickable = continue_txt_8
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_2
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    CodeComponent long_instr_3
      Code Type = Py
      Begin Routine:
        if instructions == 0:
            continueRoutine = False
    ImageComponent example_r
      image = example right.png
      pos = (0, -0.1)
      size = (1.2, 0.6)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instruction_txt_2
      color = black
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        On each trial, you must decide which of the two target images has the higher contrast (i.e., appears darker).
        To select the target with the higher contrast, simply move the mouse until the chosen target reaches the center of the screen.

        For example, in the image below, the right target has the higher contrast, so you would move your mouse to the left.

        Click 'Continue' to see more instructions and another example.
    TextComponent continue_txt_9
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_11
      clickable = continue_txt_9
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_3
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    CodeComponent long_instr_4
      Code Type = Py
      Begin Routine:
        if instructions == 0:
            continueRoutine = False
    ImageComponent example_l
      image = example left.png
      pos = (0, -0.1)
      size = (1.2, 0.6)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instruction_txt_3
      color = black
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        In this example image, the left target has the higher contrast, so you would move your mouse to the right.

        Simply moving the mouse left or right is enough, you don't need to click anything.

        Click 'Continue' to see more instructions.
    TextComponent continue_txt_10
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_12
      clickable = continue_txt_10
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_4
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    CodeComponent long_instr_5
      Code Type = Py
      Begin Routine:
        if instructions == 0:
            continueRoutine = False
    TextComponent instruction_txt_4
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        You will hear a high beep if you answer correctly.
        If you answer incorrectly, you will hear a buzzing noise instead.
        If you take too long to answer, you will hear a low beep.

        Please try to be as accurate and fast as possible, and try not to let the trial time-out without a response.


        Click 'Continue' to practice a few example trials.
    TextComponent continue_txt_11
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_13
      clickable = continue_txt_11
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine start_session
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    CodeComponent long_instr_9
      Code Type = Py
      Begin Routine:
        if instructions == 0:
            continueRoutine = False
    CodeComponent mouse_visible_2
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
    CodeComponent start_session_timer
      Code Type = Py
      End Routine:
        thisExp.addData('session_start', core.getTime())
    TextComponent end_practice_txt
      color = black
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        That is the end of the practice trials.

        Here is a last reminder of the instructions:

        In each trial, you will hear a beep and two targets will appear.
        You must decide which target has the higher contrast.
        To respond, move your mouse left or right to bring the chosen target into the middle of the screen. You don't need to click, simply drag the mouse.

        If you are correct, you will hear a high beep; if you are incorrect, you will hear a buzzing noise.

        Please keep your eyes fixated on red cross in the middle throughout the experiment.

        If you have any questions, feel free to ask out loud, the experimenter can hear you and will help you out.

        You will now start the real experiment. Good luck!
    TextComponent continue_txt_12
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Start experiment
      units = height
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    MouseComponent mouse_14
      clickable = continue_txt_12
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine debrief
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    TextComponent debrief_txt
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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      text:
        That's the end of the task.

        Thank you for participating! Now that you are done, we can tell you a bit more about the experiment.


        In this project, we want to study how well people integrate past information into their decisions.

        You just participated in a decision-making task modelled after a similar task designed by the International Brain Laboratory consortium.

        Click 'Continue' to read more.
    TextComponent continue_txt_13
      color = orange
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_15
      clickable = continue_txt_13
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent end_session_timer
      Code Type = Py
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      Begin Routine:
        thisExp.addData('session_end', core.getTime())
        win.mouseVisible = True
  Routine debrief_2
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    TextComponent debrief_txt_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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      text:
        When the visual stimulus was ambiguous, you should then have biased your responses toward the location with more frequent targets in the recent past.

        For example, if 3 out of 4 previous images were shown on the right, an expectation ("I think the next image will appear on the right") should guide your decisions ("I'm not sure, so let's choose right").

        The more probable image location could change unexpectedly, so you should have continually tracked the statistics of the task and updated your expectations accordingly.
    TextComponent continue_txt_14
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_16
      clickable = continue_txt_14
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine debrief_1
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    TextComponent debrief_txt_1
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        You watched a pair of stimuli on the screen, and judged the location of the more visible stimulus, which varied in difficulty.

        To invite you to combine this visual information with your expectations about the most likely location, we varied the probability of whether the target stimulus would appear on the left or right side.
    TextComponent continue_txt_15
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_17
      clickable = continue_txt_15
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine outro_win
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    TextComponent text
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        If you have any questions or concerns about the experiment or your data, please let the experimenter know.

        If you are participating for SONA credits, you will receive your credits before the end of the day.

        If you are participating for money, you should receive compensation in approximately 2 weeks. Once you have closed the experiment, you can fill in your payment information in the other room.

        Click 'Finish' to save your data and exit the experiment.
    TextComponent continue_txt_16
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Finish
      units = height
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    MouseComponent mouse_18
      clickable = continue_txt_16
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine setup_camera
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    TextComponent camera_info_txt
      color = black
      letterHeight = 0.035
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        We will now set up the eye-tracking camera.
        This will take just a couple minutes.

        A dot will appear on the screen at different locations.
        Simply move your eyes to follow the dot on the screen.
        Please keep staring directly at the dot until it moves to a new location.

        Click 'Continue' to start the camera setup.
    TextComponent continue_txt_17
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_19
      clickable = continue_txt_17
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = True
      dummyMode = False
      hostAddress = 100.1.1.1
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetSize = 24
      targetType = circle
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  Routine el_start_rec
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    HostDrawing HostDrawing plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = dot, fixation
      recordStatusMessage = "Block recording"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine el_stop_rec
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine practice_trial
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    CodeComponent dragging_code_2
      Code Type = Py
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      Begin Experiment:
        correct = 9
      Begin Routine:
        mouse_20.setPos(newPos=(0, 0))

        r_lim_corr = 0.05
        l_lim_corr = -0.05
        r_lim_wrong = 1236
        l_lim_wrong = -1236

        mouserec = mouse_20.getPos()
        moved = False

        dot_trajectory = []
      Each Frame:
        x = mouse_20.getPos()[0]
        #y = mouse.getPos()[1]

        if moved == False:
             mouseloc = mouse_20.getPos()
             if mouseloc[0] != mouserec[0] or mouseloc[1] != mouserec[1]:
                  moved = True
                  thisExp.addData('reaction_time',round(t*1000))

        x_r = x + 618
        x_l = x - 618

        grating_r_2.pos = (x_r,0)
        grating_l_2.pos = (x_l,0)

        if grating_r_2.overlaps(dot_2):
            dot_2.pos = grating_r_2.pos

        elif grating_l_2.overlaps(dot_2):
            dot_2.pos = grating_l_2.pos

        dot_trajectory.append(dot_2.pos[0])

        if eccentricity > 0:
            if grating_r_2.pos[0] <= r_lim_corr:
                correct = 1
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_r_2.pos[0] >= r_lim_wrong:
                correct = 0
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
        elif eccentricity < 0:
            if grating_l_2.pos[0] >= l_lim_corr:
                correct = 1
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_l_2.pos[0] <= l_lim_wrong:
                correct = 0
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False


        if sound_no_resp_2.status == STARTED:
            correct = 'NaN'
            timeout = 1
      End Routine:
        thisExp.addData("correct", correct)
        thisExp.addData('timeout', timeout)
        thisExp.addData("dot_trajectory", dot_trajectory)
    PolygonComponent dot_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every repeat] = (618, 0)
      shape = circle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent fixation_4
      color [set every repeat] = $[0,0,0]
      image = fixation_object.png
      mask = circle
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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    GratingComponent grating_l_2
      contrast [set every repeat] = leftCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (-618, 0)
      sf = 0.0073
      size = (618, 618)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = pix
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    GratingComponent grating_r_2
      contrast [set every repeat] = rightCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (618, 0)
      sf = 0.0073
      size = (618, 618)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = pix
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    MouseComponent mouse_20
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      timeRelativeTo = experiment
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    SoundComponent sound_trial_start_2
      sound [set every repeat] = 5000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      volume = 0.1
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    SoundComponent sound_no_resp_2
      sound = 567
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
      volume = 0.1
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    UnknownPluginComponent MarkEvents_3 plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = fixation,dot,grating_l,grating_r, mouse, sound_trial_start, sound_no_resp
      disabled = True
      includeAllEventMarkedComponentsForDVDrawingMessages = False
      includeAllEventMarkedComponentsForIAMessages = False
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = True
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = eccentricity,q,baseContrast,contrastDelta,bias
      useQuitKeys = True
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  Routine startrec2
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    UnknownPluginComponent HostDrawing_2 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = dot, fixation
      recordStatusMessage = "Block recording"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    UnknownPluginComponent StartRecord_2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine stoprec2
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    UnknownPluginComponent StopRecord_2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine startrec3
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    UnknownPluginComponent HostDrawing_3 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = dot, fixation
      recordStatusMessage = "Block recording"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    UnknownPluginComponent StartRecord_3 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine stoprec3
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    UnknownPluginComponent StopRecord_3 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine fix_practice
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    CodeComponent long_instr_6
      Code Type = Py
      Begin Routine:
        if instructions == 0:
            continueRoutine = False
    CodeComponent mouse_visible_5
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = False
        mouse.setPos(newPos=(0, 0))
      Each Frame:
        mouse.setPos(newPos=(0, 0))
    CodeComponent set_contrast_side_2
      Code Type = Py
      Begin Experiment:
        import random
      Begin Routine:
        if eccentricity == -15:
            leftCont = baseContrast+contrastDelta
            rightCont = baseContrast
        elif eccentricity == 15:
            leftCont = baseContrast
            rightCont = baseContrast+contrastDelta

        signed_contrast=rightCont-leftCont


        # Save all these variables to the log
        thisExp.addData("signed_contrast", signed_contrast)
        thisExp.addData("leftCont", leftCont)
        thisExp.addData("rightCont", rightCont)
    ImageComponent fixation_5
      color [set every repeat] = $[1,1,1]
      image = fixation_object.png
      mask = circle
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $q
      units = deg
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  Routine trial_practice
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    CodeComponent long_instr_7
      Code Type = Py
      Begin Routine:
        if instructions == 0:
            continueRoutine = False
    CodeComponent dragging_code_3
      Code Type = Py
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      Begin Experiment:
        correct = 9
      Begin Routine:
        mouse_21.setPos(newPos=(0, 0))

        r_lim_corr = 0.05
        l_lim_corr = -0.05
        r_lim_wrong = 1236
        l_lim_wrong = -1236

        mouserec = mouse_21.getPos()
        moved = False

        dot_trajectory = []
      Each Frame:
        x = mouse_21.getPos()[0]
        #y = mouse.getPos()[1]

        if moved == False:
             mouseloc = mouse_21.getPos()
             if mouseloc[0] != mouserec[0] or mouseloc[1] != mouserec[1]:
                  moved = True
                  thisExp.addData('reaction_time',round(t*1000))

        x_r = x + 618
        x_l = x - 618

        grating_r_3.pos = (x_r,0)
        grating_l_3.pos = (x_l,0)

        if grating_r_3.overlaps(dot_3):
            dot_3.pos = grating_r_3.pos

        elif grating_l_3.overlaps(dot_3):
            dot_3.pos = grating_l_3.pos

        dot_trajectory.append(dot_3.pos[0])

        if eccentricity > 0:
            if grating_r_3.pos[0] <= r_lim_corr:
                correct = 1
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_r_3.pos[0] >= r_lim_wrong:
                correct = 0
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
        elif eccentricity < 0:
            if grating_l_3.pos[0] >= l_lim_corr:
                correct = 1
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_l_3.pos[0] <= l_lim_wrong:
                correct = 0
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False


        if sound_no_resp_3.status == STARTED:
            correct = 'NaN'
            timeout = 1
      End Routine:
        thisExp.addData("correct", correct)
        thisExp.addData('timeout', timeout)
        thisExp.addData("dot_trajectory", dot_trajectory)
    PolygonComponent dot_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every repeat] = (618, 0)
      shape = circle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent fixation_6
      color [set every repeat] = $[0,0,0]
      image = fixation_object.png
      mask = circle
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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    GratingComponent grating_l_3
      contrast [set every repeat] = leftCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (-618, 0)
      sf = 0.0073
      size = (618, 618)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = pix
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    GratingComponent grating_r_3
      contrast [set every repeat] = rightCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (618, 0)
      sf = 0.0073
      size = (618, 618)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = pix
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    MouseComponent mouse_21
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      timeRelativeTo = experiment
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    SoundComponent sound_trial_start_3
      sound [set every repeat] = 5000
      speakerIndex = 7.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      volume = 0.1
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    SoundComponent sound_no_resp_3
      sound [set every repeat] = 567
      speakerIndex = 7.0
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
      volume = 0.1
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  Routine feedback_practice
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    CodeComponent long_instr_8
      Code Type = Py
      Begin Routine:
        if instructions == 0:
            continueRoutine = False
    CodeComponent feedback_code_2
      Code Type = Py
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      Begin Experiment:
        fb_sound = 100
        fb_dur = 10
        fb_sound_dur = 5
        fb_volume = 0.1
      Begin Routine:
        mouse.setPos(newPos=(0, 0))

        if correct==1:
            fb_sound = "2000.wav"
            fb_sound_dur = 0.2
            fb_dur = 1
            fb_volume = 0.1

        elif correct==0:
            fb_sound = "whitenoise.wav"
            fb_sound_dur = 0.5
            fb_dur = 2
            fb_volume = 0.1

        else:
            fb_sound = 200
            fb_sound_dur = 0.1
            fb_dur = 1.5
            fb_volume = 0
      Each Frame:
        mouse.setPos(newPos=(0, 0))
      End Routine:
        #feedback_sound.sound
    SoundComponent feedback_sound_2
      sound [set every repeat] = $fb_sound
      speakerIndex = 7.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_sound_dur
      volume [set every repeat] = fb_volume
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    ImageComponent fixation_7
      image = fixation_object.png
      mask = circle
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_dur
      units = deg
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  Routine record_delay
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    TextComponent blank_txt
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = wait...
      units = height
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  Routine pre_instr
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    CodeComponent long_instr
      Code Type = Py
      Begin Routine:
        if instructions == 0:
            continueRoutine = False
    TextComponent pre_instr_txt
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Thank you! We will now walk you through the steps of this decision-making experiment.

        You will see some written instructions, as well as two example images of what the stimuli look like.

        You will then practice the task in a few example trials.


        Click 'Continue' to see the instructions.
    TextComponent continue_txt_18
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_22
      clickable = continue_txt_18
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine debrief_3
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    TextComponent debrief_txt_3
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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      text:
        We will use your choice data to investigate how well you integrated visual information from your recent history, and what strategies you took to combine these two.

        This behavioural experiment will form the basis for later studying how such decision-processes unfold in the human brain.
    TextComponent continue_txt_19
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_23
      clickable = continue_txt_19
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine debrief_4
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    TextComponent debrief_txt_4
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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      text:
        Please, do not reveal the details of this study while we are still collecting the data.

        This might affect the behaviour of prospective participants.

        It is really important that people who will participate in this study do not yet know about its actual aim and design.


        You can decide to withdraw your data from the study at any time.

        Note that the coded data may be shared in a public repository, after which it cannot be removed.
    TextComponent continue_txt_20
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_24
      clickable = continue_txt_20
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine short_instructions
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    CodeComponent short_instr
      Code Type = Py
      Begin Experiment:
        #if int(expInfo['participant']) % 4 in [1, 2]:
        #    instructions = 1
        #else:
        #    instructions = 0

        instructions = 0
        thisExp.addData("instructions", instructions)
      Begin Routine:
        if instructions == 1:
            continueRoutine = False
    CodeComponent start_session_timer_2
      Code Type = Py
      End Routine:
        thisExp.addData('session_start', core.getTime())
    TextComponent short_instructions_txt
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Thank you! We will now move on to the experiment.

        You will take part in a computer game.
        However, you will not receive any instructions: the goal is to figure out the rules of the game by yourself.

        To interact with the game, you will only need to move the mouse; clicking does not do anything.

        During the game, you will see a red cross in the middle of the screen. Please try to keep your eyes fixated on this cross throughout the experiment.

        When you are ready, click 'Start experiment'.
    TextComponent continue_txt_21
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Start experiment
      units = height
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    MouseComponent mouse_25
      clickable = continue_txt_21
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_1
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    CodeComponent long_instr_2
      Code Type = Py
      Begin Routine:
        if instructions == 0:
            continueRoutine = False
    CodeComponent save_winsize
      Code Type = Py
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      Begin Experiment:
        thisExp.addData("win_size", win.size)
      End Routine:
        thisExp.addData('session_start', core.getTime())
    TextComponent instruction_txt
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        The experiment consists of many trials. In each trial, you will see a red fixation point in the middle of the screen.
        Please keep your eyes focused on this fixation point throughout the experiment.

        At the beginning of each trial you will hear a sharp beep.
        You will then see two target images appear on each side of the screen.

        Click 'Continue' to see more instructions and examples.
    TextComponent continue_txt_2
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_2
      clickable = continue_txt_2
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end_task
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    CodeComponent mouse_visible_7
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
    CodeComponent end_session_timer_2
      Code Type = Py
      Begin Routine:
        thisExp.addData('session_end', core.getTime())
    TextComponent end_task_txt
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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      text:
        That's the end of the game.
        Thank you for participating!

        Now that you are done, we will ask you a few questions about the task you just completed.

        Please take the keyboard you see on the desk, and use it to type your answers. You also no longer need to keep your head on the chin rest.

        Click 'Continue' to see the first question.
    TextComponent continue_txt_22
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_26
      clickable = continue_txt_22
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine question1
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    TextComponent q1_txt
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Please describe how you think the game worked
        and what you think the rules were.

        Click 'Continue' to see the next question.
    TextboxComponent textbox1
      alignment = top-left
      bold = False
      borderColor = black
      borderWidth = 0
      color = black
      editable = True
      letterHeight = 0.03
      lineSpacing = 1
      overflow = scroll
      padding = 0.02
      placeholder = Type your answer...
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent continue_txt_23
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_27
      clickable = continue_txt_23
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine question2
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    TextComponent q2_txt
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      units = height
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      text:
        How well do you think you did in the game?

        Click 'Continue' to see the next question.
    TextboxComponent textbox2
      alignment = top-left
      bold = False
      borderColor = black
      borderWidth = 0
      color = black
      editable = True
      letterHeight = 0.03
      lineSpacing = 1
      overflow = scroll
      padding = 0.02
      placeholder = Type your answer...
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent continue_txt_24
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_28
      clickable = continue_txt_24
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine question3
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    TextComponent q3_txt
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      units = height
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      text:
        What strategies did you use during the game?

        Click 'Continue' to see the next question.
    TextboxComponent textbox3
      alignment = top-left
      bold = False
      borderColor = black
      borderWidth = 0
      color = black
      editable = True
      letterHeight = 0.03
      lineSpacing = 1
      overflow = scroll
      padding = 0.02
      placeholder = Type your answer...
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent continue_txt_25
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_29
      clickable = continue_txt_25
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine question4
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    TextComponent q4_txt
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Did you notice any patterns in the game?

        Click 'Continue' when you are done.
    TextboxComponent textbox4
      alignment = top-left
      bold = False
      borderColor = black
      borderWidth = 0
      color = black
      editable = True
      letterHeight = 0.03
      lineSpacing = 1
      overflow = scroll
      padding = 0.02
      placeholder = Type your answer...
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent continue_txt_26
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_30
      clickable = continue_txt_26
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end_exp
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    TextComponent end_exp_txt
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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      text:
        You've reached the end of the experiment.
        Thank you very much for participating!

        Once you have closed the experiment, you can leave the room.
        The experimenter will then give you more information and answer any questions you may have.

        Click 'Finish' to save your data and exit the experiment.
    TextComponent continue_txt_27
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Finish
      units = height
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    MouseComponent mouse_31
      clickable = continue_txt_27
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine baseline_pupil
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    CodeComponent mouse_visible_6
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
    TextComponent pupil_screens_instr
      color = black
      letterHeight = 0.035
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Thank you!

        To get a baseline measure of your pupil, you will now see a dark screen and then a bright screen for 30 seconds.

        Simply keep your eyes on the screen. After 30 seconds, the task will continue automatically.

        Click 'Continue' to start.
    TextComponent continue_txt_28
      color = orange
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_32
      clickable = continue_txt_28
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine dark
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    ImageComponent dark_screen
      image = black.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      units = height
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  Routine bright
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    ImageComponent bright_screen
      image = white.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      units = height
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Flow
  Routine welcome
  Routine setup_camera
  Routine el_start_rec
  Routine demographics
  Routine age
  Routine gender
  Routine handedness
  Routine short_instructions
  Routine pre_instr
  Routine instructions_1
  Routine instructions_2
  Routine instructions_3
  Routine instructions_4
  LoopInitiator practice loopType="TrialHandler"
    Selected rows = 36:41
    conditionsFile = $'pregen_sequence_' + str(int(expInfo['participant'][-1])) + '.xlsx'
    loopType = random
    nReps = instructions
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    conditions:
      [{'og_eccentricity': -35, 'og_contrast': 1, 'og_quiescence': 0.6101039606035616, 'og_stim_phase1': 1.36934611078072, 'og_stim_phase2': 2.353304971691044, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.6101039606035616, 'bias': 0.5},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_quiescence': 0.603376323613809, 'og_stim_phase1': 1.445655573953271, 'og_stim_phase2': 5.973514161360217, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.603376323613809, 'bias': 0.5},
      {'og_eccentricity': -35, 'og_contrast': 1, 'og_quiescence': 0.6186980665367, 'og_stim_phase1': 0.1755522638920207, 'og_stim_phase2': 4.599253580133889, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.6186980665367, 'bias': 0.5},
      {'og_eccentricity': 35, 'og_contrast': 0.0625, 'og_quiescence': 0.5599748930001578, 'og_stim_phase1': 1.793047135405797, 'og_stim_phase2': 3.761482191925223, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.5599748930001578, 'bias': 0.5},
      {'og_eccentricity': -35, 'og_contrast': 0.25, 'og_quiescence': 0.6748868912538899, 'og_stim_phase1': 1.396837883159611, 'og_stim_phase2': 0.980294029274052, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.1, 'q': 0.6748868912538899, 'bias': 0.5}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
    Routine fix_practice
    Routine trial_practice
    Routine feedback_practice
  LoopTerminator practice
  Routine start_session
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $'pregen_sequence_' + str(int(expInfo['participant'][-1])) + '.xlsx'
    loopType = sequential
    nReps = 1
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    conditions:
      [{'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61010396, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61010396, 'bias': 0.5},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.60337632, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.60337632, 'bias': 0.5},
      {'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61869807, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61869807, 'bias': 0.5},
      {'og_eccentricity': 35, 'og_contrast': 0.0625, 'og_q': 0.55997489, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.55997489, 'bias': 0.5},
      {'og_eccentricity': -35, 'og_contrast': 0.25, 'og_q': 0.67488689, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.1, 'q': 0.67488689, 'bias': 0.5},
      {'og_eccentricity': -35, 'og_contrast': 0, 'og_q': 0.65214593, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0, 'q': 0.65214593, 'bias': 0.5},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4835406, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4835406, 'bias': 0.5},
      {'og_eccentricity': 35, 'og_contrast': 0.125, 'og_q': 0.48355817, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.48355817, 'bias': 0.5},
      {'og_eccentricity': -35, 'og_contrast': 0.0625, 'og_q': 0.67839508, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.67839508, 'bias': 0.5}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
    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine record_delay
  Routine el_stop_rec
  Routine end_task
  Routine question1
  Routine question2
  Routine question3
  Routine question4
  Routine end_exp
