PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expName, data.getDateStr(format="%Y_%b_%d_%H.%M.%S"))
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = labMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  expName = pedestal_cursor_ibl
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent dragging_code
      Code Type = Py
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      Begin Experiment:
        correct = 9
      Begin Routine:
        mouse.setPos(newPos=(0, 0))

        r_lim_corr = 0.05
        l_lim_corr = -0.05
        r_lim_wrong = 30
        l_lim_wrong = -30

        mouserec = mouse.getPos()
        moved = False

        dot_trajectory = []
      Each Frame:
        x = mouse.getPos()[0]
        #y = mouse.getPos()[1]

        if moved == False:
             mouseloc = mouse.getPos()
             if mouseloc[0] != mouserec[0] or mouseloc[1] != mouserec[1]:
                  moved = True
                  thisExp.addData('reaction_time',round(t*1000))

        x_r = x + 15
        x_l = x - 15

        grating_r.pos = (x_r,0)
        grating_l.pos = (x_l,0)

        if grating_r.overlaps(dot):
            dot.pos = grating_r.pos

        elif grating_l.overlaps(dot):
            dot.pos = grating_l.pos

        dot_trajectory.append(dot.pos[0])

        if eccentricity > 0:
            if grating_r.pos[0] <= r_lim_corr:
                correct = 1
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_r.pos[0] >= r_lim_wrong:
                correct = 0
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
        elif eccentricity < 0:
            if grating_l.pos[0] >= l_lim_corr:
                correct = 1
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_l.pos[0] <= l_lim_wrong:
                correct = 0
                timeout=0
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False


        if sound_no_resp.status == STARTED:
            correct = 'NaN'
            timeout = 1
      End Routine:
        thisExp.addData("correct", correct)
        thisExp.addData('timeout', timeout)
        thisExp.addData("dot_trajectory", dot_trajectory)
    ImageComponent fixation
      color [set every repeat] = $[0,0,0]
      image = fixation_object.png
      mask = circle
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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    GratingComponent grating_l
      contrast [set every repeat] = leftCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (-15, 0)
      sf = 0.3
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = deg
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    GratingComponent grating_r
      contrast [set every repeat] = rightCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (15, 0)
      sf = 0.3
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = deg
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    PolygonComponent dot
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every repeat] = (eccentricity, 0)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      timeRelativeTo = experiment
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    SoundComponent sound_trial_start
      sound = 5000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      volume = 0.1
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    SoundComponent sound_no_resp
      sound = 567
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
      volume = 0.1
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  Routine set_bias_condition
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    CodeComponent bias_rows_code
      Code Type = Py
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      Begin Experiment:
        bias_file = ""
        bias_yn = 0
      Begin Routine:
        if int(expInfo['participant'])%2 == 0:
            bias_file = "nobias_block.xlsx"
            bias_yn = 0

        else:
            bias_file = "bias_block.xlsx"
            bias_yn = 1

        thisExp.addData("bias_file", bias_file)
        thisExp.addData("bias_yn", bias_yn)
    CodeComponent windows_mousevisible
      Code Type = Py
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      Begin Routine:
        win.Mousevisible = False
  Routine fix
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    CodeComponent mouse_visible
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = False
        mouse.setPos(newPos=(0, 0))
    CodeComponent set_iti
      Code Type = Py
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      Begin Experiment:
        #iti = 0
        #maxDur = 0.7
        #minDur = 0.4
      Begin Routine:
        import random
        #iti = minDur + (maxDur - minDur) * random.random()

        #thisExp.addData("iti", iti)
    CodeComponent set_contrast_side
      Code Type = Py
      Begin Routine:
        #import random
        #deltaSide=(1, -1)[random.random()>biasPoint] # Using a ternary operator to pick a side at random (+ bias if required).
        # A bias point of .2 means that the stimulus has an 80% chance of being assigned a -1 value (it's most likely to be on the left).
        # The operator evaluates the thing on the right as 0 or 1 (true or false)
        # and then picks the 0th or 1th thing from the preceding list.

        #leftCont=baseContrast+contrastDelta*(deltaSide==-1)
        #rightCont=baseContrast+contrastDelta*(deltaSide==1)
        if eccentricity == -15:
            leftCont = baseContrast+contrastDelta
            rightCont = baseContrast
        elif eccentricity == 15:
            leftCont = baseContrast
            rightCont = baseContrast+contrastDelta

        signed_contrast=rightCont-leftCont

        #if leftCont == rightCont:
        #    eccentricity = -15
        #elif leftCont > rightCont:
        #    eccentricity = -15
        #elif rightCont > leftCont:
        #    eccentricity = 15

        # Save all these variables to the log
        thisExp.addData("signed_contrast", signed_contrast)
        thisExp.addData("leftCont", leftCont)
        thisExp.addData("rightCont", rightCont)
    ImageComponent fixation_2
      color [set every repeat] = $[1,1,1]
      image = fixation_object.png
      mask = circle
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $q
      units = deg
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  Routine feedback
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    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        fb_sound = 100
        fb_dur = 10
        fb_sound_dur = 5
        fb_volume = 0.1
      Begin Routine:
        mouse.setPos(newPos=(0, 0))

        if correct==1:
            fb_sound = "2000.wav"
            fb_sound_dur = 0.2
            fb_dur = 1
            fb_volume = 0.1

        elif correct==0:
            fb_sound = "whitenoise.wav"
            fb_sound_dur = 0.5
            fb_dur = 2
            fb_volume = 0.1

        else:
            fb_sound = 200
            fb_sound_dur = 0.1
            fb_dur = 1.5
            fb_volume = 0
      End Routine:
        feedback_sound.sound
    SoundComponent feedback_sound
      sound [set every repeat] = $fb_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_sound_dur
      volume [set every repeat] = fb_volume
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    ImageComponent fixation_3
      image = fixation_object.png
      mask = circle
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_dur
      units = deg
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  Routine outro
    CodeComponent end_session_timer
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('session_end', core.getTime())
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    TextComponent outro_text
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = height
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      text:
        That's the end of the task.

        Thank you for participating!
        *-* debrief text *-*

        You will now be redirected to an online form, where you must fill in your details in order to receive payment or credits. If you do not fill in your details, you will not receive compensation.

        Click 'Continue' to close this window and open the online form.
    TextComponent continue_txt_5
      color = 1.0000, -0.0039, -0.3725
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_7
      clickable = right_hand, left_hand, ambidx
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine block_break
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    CodeComponent block_counter
      Code Type = Py
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      Begin Experiment:
        if int(expInfo['participant'])%2 == 0:
            block_breaks = "n"

        else:
            block_breaks = 'y'

        thisExp.addData("block_breaks", block_breaks)
      Begin Routine:
        if block_breaks == 'n':
            continueRoutine=False
    TextComponent break_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = height
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      text:
        You can take a quick break to rest your eyes.

        The experiment will resume automatically in
    TextComponent countdown
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $int(round(10 - t, 3))
      units = height
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  Routine example_grating
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    GratingComponent examplegrating
      mask = gauss
      pos = (350, 0)
      saveStartStop = False
      sf = 0.5
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = deg
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  Routine welcome
    RoutineSettingsComponent welcome
      disabled = True
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    TextComponent welcome_position
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Welcome to the experiment!

        Please position yourself comfortably in front of the computer, making sure that you can comfortably reach the mouse. Try to keep this position throughout the experiment.

        Click 'Continue' to see the instructions.
    TextComponent continue_txt
      color = 1.0000, -0.0039, -0.3725
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_1
      clickable = continue_txt
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent instruction_txt
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        You will see a fixation cross in the middle of the screen; please keep you eyes focused on this fixation cross throughout the experiment.

        At the beginning of each trial you will hear a sharp beep.
        You will then see two targets appear on each side of the screen.
        You must choose the target with the stronger contrast: to do this, simply drag the mouse to move the chosen target to the center of the screen.
        For example, if the right target has the stronger contrast, move your mouse to the left.
        If the left target has the stronger contrast, move your mouse to the right.
        Simply moving the mouse is enough, you don't need to click anything.

        You will hear a high beep if you answered correctly. If you answer incorrectly, you will hear a buzzing noise instead. If you take too long to answer, you will hear a low beep.

        Please try to be as fast and accurate as possible.

        Click 'Continue' to see some examples.
    TextComponent continue_txt_2
      color = 1.0000, -0.0039, -0.3725
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    MouseComponent mouse_2
      clickable = continue_txt_2
      correctAns = continue_txt
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent start_session_timer
      Code Type = Py
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      Begin Experiment:
        thisExp.addData("win_size", win.size)
      End Routine:
        thisExp.addData('session_start', core.getTime())
  Routine consent_form
    RoutineSettingsComponent consent_form
      disabled = True
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    CodeComponent exit_exp
      Code Type = Py
      Each Frame:
        if mouse_3.isPressedIn(exit_txt):
            endExpNow=True
    TextComponent consent_txt
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        *-* consent form text *-*

        If you consent to the terms above and want to take part in the experiment, click 'Continue'.
        If you do not consent, click 'Exit'.
    TextComponent continue_txt_3
      color = 1.0000, -0.0039, -0.3725
      letterHeight = 0.04
      pos = (0.3, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
      units = height
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    TextComponent exit_txt
      color = 1.0000, -0.0039, -0.3725
      letterHeight = 0.04
      pos = (-0.3, -0.4)
      startVal [time (s)] = 0.0
      text = Exit
      units = height
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    MouseComponent mouse_3
      clickable = continue_txt_3, exit_txt
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine age
    RoutineSettingsComponent age
      disabled = True
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    TextComponent age_txt
      letterHeight = 0.75
      pos = (0, 5)
      startVal [time (s)] = 0.0
      units = deg
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      text:
        How old are you?

        Select your age, then click 'Continue'.
    SliderComponent age_slider
      forceEndRoutine = False
      granularity = 0
      labels = 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30
      letterHeight = 0.75
      size = (30, 2)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30)
      units = deg
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    TextComponent continue_txt_4
      color = 1.0000, -0.0039, -0.3725
      letterHeight = 0.75
      pos = (0, -5)
      startVal [time (s)] = 0.0
      text = Continue
      units = deg
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    MouseComponent mouse_4
      clickable = continue_txt_4
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine gender
    RoutineSettingsComponent gender
      disabled = True
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    TextComponent gender_txt
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = What is your gender?
      units = height
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    TextComponent woman
      letterHeight = 0.035
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = Woman
      units = height
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    TextComponent man
      letterHeight = 0.035
      pos = (-0.15, -0.1)
      startVal [time (s)] = 0.0
      text = Man
      units = height
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    TextComponent nonbinary
      letterHeight = 0.035
      pos = (0.09, -0.1)
      startVal [time (s)] = 0.0
      text = Non-binary
      units = height
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    TextComponent other
      letterHeight = 0.035
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Other/
        Prefer not to say
    MouseComponent mouse_5
      clickable = woman, man, nonbinary, other
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine handedness
    RoutineSettingsComponent handedness
      disabled = True
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    TextComponent handedness_txt
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Are you:
      units = height
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    TextComponent right_hand
      letterHeight = 0.035
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = Right-handed
      units = height
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    TextComponent left_hand
      letterHeight = 0.035
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Left-handed
      units = height
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    TextComponent ambidx
      letterHeight = 0.035
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      text = Ambidextrous
      units = height
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    MouseComponent mouse_6
      clickable = right_hand, left_hand, ambidx
      correctAns = continue_txt
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine survey_link
    CodeComponent code_link
      Code Type = Py
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      Begin Routine:
        import webbrowser

        win.fullscr = False# exist full screen
        webbrowser.open('https://www.google.com') # open browser
      Each Frame:
        #if mouse_8.isPressedIn(txt_for_link):
        #    webbrowser.open("https://www.google.com")
      End Routine:
        #win.fullscr = True #bring back to full screen

        endExpNow=True
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    TextComponent txt_for_link
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Opening URL...
      units = height
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Flow
  Routine welcome
  Routine consent_form
  Routine age
  Routine gender
  Routine handedness
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:100
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61010396, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61010396},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.60337632, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.60337632},
      {'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61869807, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61869807},
      {'og_eccentricity': 35, 'og_contrast': 0.0625, 'og_q': 0.55997489, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.55997489},
      {'og_eccentricity': -35, 'og_contrast': 0.25, 'og_q': 0.67488689, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.1, 'q': 0.67488689},
      {'og_eccentricity': -35, 'og_contrast': 0, 'og_q': 0.65214593, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0, 'q': 0.65214593},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4835406, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4835406},
      {'og_eccentricity': 35, 'og_contrast': 0.125, 'og_q': 0.48355817, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.48355817},
      {'og_eccentricity': -35, 'og_contrast': 0.0625, 'og_q': 0.67839508, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.67839508},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4548179, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4548179}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
    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine block_break
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 101:200
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61010396, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61010396},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.60337632, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.60337632},
      {'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61869807, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61869807},
      {'og_eccentricity': 35, 'og_contrast': 0.0625, 'og_q': 0.55997489, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.55997489},
      {'og_eccentricity': -35, 'og_contrast': 0.25, 'og_q': 0.67488689, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.1, 'q': 0.67488689},
      {'og_eccentricity': -35, 'og_contrast': 0, 'og_q': 0.65214593, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0, 'q': 0.65214593},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4835406, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4835406},
      {'og_eccentricity': 35, 'og_contrast': 0.125, 'og_q': 0.48355817, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.48355817},
      {'og_eccentricity': -35, 'og_contrast': 0.0625, 'og_q': 0.67839508, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.67839508},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4548179, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4548179}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
    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_2
  Routine block_break
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 201:300
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_3
  Routine block_break
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = 301:400
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_4
  Routine block_break
  LoopInitiator trials_5 loopType="TrialHandler"
    Selected rows = 401:500
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_5
  Routine block_break
  LoopInitiator trials_6 loopType="TrialHandler"
    Selected rows = 501:600
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_6
  Routine outro
  Routine survey_link
