PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = mouse_version_ibl
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent dragging_code
      Code Type = Py
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      Begin Routine:
        mouse.setPos(newPos=(eccentricity, 0))

        r_lim_corr = -0.001
        l_lim_corr = 0.001
        r_lim_wrong = 0.49
        l_lim_wrong = -0.49

        mouserec = mouse.getPos()
        moved = False
      Each Frame:
        x = mouse.getPos()[0]
        #y = mouse.getPos()[1]

        if moved == False:
             mouseloc = mouse.getPos()
             if mouseloc[0] != mouserec[0] or mouseloc[1] != mouserec[1]:
                  moved = True
                  thisExp.addData('reaction_time',round(t*1000))

        #if grating.contains(mouse):
        grating.pos = (x,0)
        dot.pos = (x,0)

        if eccentricity > 0:
            if dot.pos[0] < r_lim_corr:
                correct = 1
                timeout='n'
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif dot.pos[0] > r_lim_wrong:
                correct = 0
                timeout='n'
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
        elif eccentricity < 0:
            if dot.pos[0] > l_lim_corr:
                correct = 1
                timeout='n'
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif dot.pos[0] < l_lim_wrong:
                correct = 0
                timeout='n'
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False

        #if fixation.overlaps(dot):
        #    correct = 1
        #    timeout='n'
        #    thisExp.addData("response_time", round(t*1000))
        #    continueRoutine=False
        #elif dot.pos[0] > r_lim_wrong or dot.pos[0] < l_lim_wrong:
        #    correct = 0
        #    timeout='n'
        #    thisExp.addData("response_time", round(t*1000))
        #    continueRoutine=False
      End Routine:
        if correct!=1 and correct!=0:
            timeout='y'
            correct=0

        thisExp.addData("correct", correct)
        thisExp.addData('timeout', timeout)
    ImageComponent fixation
      color [set every repeat] = $[0,0,0]
      image = fixation_object.png
      mask = circle
      saveStartStop = False
      size [set every repeat] = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    GratingComponent grating
      contrast [set every repeat] = contrast_gr
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (eccentricity, 0)
      saveStartStop = False
      sf = 5
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
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    PolygonComponent dot
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every repeat] = (eccentricity, 0)
      saveStartStop = False
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine fix
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    CodeComponent mouse_visible
      Code Type = Py
      disabled = True
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      Begin Routine:
        win.mouseVisible = False
    CodeComponent set_iti
      Code Type = Py
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      Begin Experiment:
        iti = 0
        maxDur = 3
        minDur = 1
      Begin Routine:
        import random
        iti = minDur + (maxDur - minDur) * random.random()

        thisExp.addData("iti", iti)
    CodeComponent set_contrast_side
      Code Type = Py
      Begin Routine:
        import random
        #biasPoint = 0.5
        gr_side=(1, -1)[random.random()>biasPoint] # Using a ternary operator to pick a side at random (+ bias if required).
        # A bias point of .2 means that the stimulus has an 80% chance of being assigned a -1 value (it's most likely to be on the left).
        # The operator evaluates the thing on the right as 0 or 1 (true or false)
        # and then picks the 0th or 1th thing from the preceding list.

        eccentricity = (0.35*gr_side)


        # Save all these variables to the log
        thisExp.addData("grating_side", gr_side)
        thisExp.addData("biasPoint", biasPoint)
        thisExp.addData("eccentricity", eccentricity)
    ImageComponent fixation_2
      color [set every repeat] = $[1,1,1]
      image = fixation_object.png
      mask = circle
      saveStartStop = False
      size [set every repeat] = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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  Routine set_bias_condition
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    CodeComponent bias_rows_code
      Code Type = Py
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      Begin Experiment:
        bias_file = ""
        bias_yn = 0
      Begin Routine:
        if int(expInfo['participant'])%2 == 0:
            bias_file = "nobias_block.xlsx"
            bias_yn = 0

        else:
            bias_file = "bias_block.xlsx"
            bias_yn = 1

        thisExp.addData("bias_file", bias_file)
        thisExp.addData("bias_yn", bias_yn)
  Routine block_break
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    CodeComponent block_counter
      Code Type = Auto->JS
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      Begin Experiment:
        nBlocks=0
      Each Frame:
        if nBlocks==1:
            continueRoutine=False
      End Routine:
        nBlocks+=1
    TextComponent break_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You can take a quick break to rest your eyes.

        The experiment will resume automatically in
    TextComponent countdown
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $int(round(10 - t, 3))
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    KeyboardComponent space_continue_6
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine outro
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    TextComponent outro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        That's the end of the experiment.

        Thank you for participating!
        You can collect your things and exit the room. The experiment leader will give you more information about the study.

        Press space to finish
    KeyboardComponent space_continue_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
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    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        feedback_txt = "?"
      Begin Routine:
        if correct==1:
            feedback_txt="Y"
        elif correct==0:
            feedback_txt="N"
    TextComponent fdbck
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_txt
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Flow
  Routine set_bias_condition
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = $bias_file
    loopType = random
    nReps = 2
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = contrast_levels.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'contrast_gr': 0.03},
        {'contrast_gr': 0.0625},
        {'contrast_gr': 0.125},
        {'contrast_gr': 0.25},
        {'contrast_gr': 0.75},
        {'contrast_gr': 0.03},
        {'contrast_gr': 0.0625},
        {'contrast_gr': 0.125},
        {'contrast_gr': 0.25},
        {'contrast_gr': 0.75},
        {'contrast_gr': 0.03},
        {'contrast_gr': 0.0625},
        {'contrast_gr': 0.125},
        {'contrast_gr': 0.25},
        {'contrast_gr': 0.75}]
      Routine fix
      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine block_break
  LoopTerminator block
  Routine outro
